CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9])-(?P<FOV>[0-9])_(?P<channel>(TRANS|[0-9]{3}))
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(masks)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Width:  154.9031 µm (1540)', 'Height:  154.6013 µm (1537)', 'depth: variable at 1 µm spacing', 'Resolution:  9.9417 pixels per µm', 'Pixel size: 0.1006x0.1006 µm^2', 'Magnification: 0.50']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:10.0
    Select the rule criteria:and (file does contain "405")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TRANS")
    Name to assign these images:TRANS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "masks")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

Resize:[module_num:5|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enabled:False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
    Select the input image:DNA
    Name the output image:Resize_DNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1
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    Interpolation method:Bicubic
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    Additional image count:0

RunCellpose:[module_num:6|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enabled:False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
    Select the input image:Resize_DNA
    Rescale images before running Cellpose:No
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:50
    Detection mode:tissuenet
    Name the output object:RunCellpose
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.5
    Stitch Threshold:0.0
    Use 3D:Yes
    Minimum size:-1
    Use Omnipose for mask reconstruction:Yes
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:Yes

MeasureObjectIntensity:[module_num:7|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:RunCellpose

MeasureObjectSizeShape:[module_num:8|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enabled:False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
    Select object sets to measure:RunCellpose
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:9|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:RunCellpose
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ConvertImageToObjects:[module_num:10|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enabled:False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
    Select the input image:DNA
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Threshold:[module_num:11|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enabled:False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
    Select the input image:DNA
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:25
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    Thresholding method:Otsu

ConvertImageToObjects:[module_num:12|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enabled:False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
    Select the input image:mask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Threshold:[module_num:13|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
    Select the input image:mask
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

Watershed:[module_num:14|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
    Select the input image:Threshold
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Markers
    Markers:Threshold
    Mask:mask
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:Yes
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ConvertImageToObjects:[module_num:15|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enabled:False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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:DNA
    Select objects to measure:Watershed
